PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = BasicTrial
  Units = use prefs
  Screen = 1
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Routines
  Routine BlankWait
    ImageComponent BlankPic
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./BlankPic.png
      size = (0.5, 0.5)
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  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      image = ./BlankPic.png
      size = (0.5, 0.5)
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    ImageComponent image_2
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      image = ./FocalPic.png
      size = (0.5, 0.5)
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    ImageComponent image_3
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      image = ./EastPic.png
      size = (0.5, 0.5)
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  Routine Reward
    ImageComponent RewardImage
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./RewardPic.jpg
      size = (0.5, 0.5)
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  Routine Focal
    CodeComponent code
      Begin Routine:
        from psychopy import visual, core
        from PIL import Image
        import numpy as np
        import glob, os, random, copy, time

        randomTime = random.uniform(1,2)
        f1 = Image.open('./FocalPic.png', 'r')
        visual.ImageStim(win, f1).draw()
        win.flip()
        core.wait(randomTime)
  Routine RandomStimuli
    CodeComponent RandomPicControl
      Begin Routine:
        from psychopy import visual, core
        from PIL import Image
        import numpy as np
        import glob, os, random, copy, time

        f1 = Image.open('./SolidRedPic.png', 'r')
        visual.ImageStim(win, f1).draw()
        win.flip()
        #core.wait(2.0)

        randomNumber = randint(0,4)
        if randomNumber==0:
            #f1 = Image.open('./EastPic.png', 'r')
            #visual.ImageStim(win, f1).draw()
            #win.flip()
            aperture = visual.Aperture(win, size=0.9, pos=(0.01,-0.4), ori=1, shape='square')
            core.wait(2.0)
        elif randomNumber==1:
            #f1 = Image.open('./WestPic.png', 'r')
            #visual.ImageStim(win, f1).draw()
            #win.flip()
            aperture = visual.Aperture(win, size=0.9, pos=(0.01,0.4), ori=1, shape='square')
            core.wait(2.0)
        elif randomNumber==2:
            #f1 = Image.open('./NorthPic.png', 'r')
            #visual.ImageStim(win, f1).draw()
            #win.flip()
            aperture = visual.Aperture(win, size=0.9, pos=(0.4,0.01), ori=1, shape='square')
            core.wait(2.0)
        else:
            #f1 = Image.open('./SouthPic.png', 'r')
            #visual.ImageStim(win, f1).draw()
            #win.flip()
            aperture = visual.Aperture(win, size=0.9, pos=(-0.4,0.01), ori=1, shape='square')
            core.wait(2.0)
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine BlankWait
    Routine Focal
    Routine RandomStimuli
    Routine Reward
  LoopTerminator trials
